PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 12
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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  Routine counting
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 1
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = 2
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      text = 3
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Flow
  Routine trial
  Routine counting
