PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = 5-8
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        group = None
  Routine GroupSelection
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    TextComponent GroupInstructions
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Press 1 for Group 1, 2 for Group 2, 3 for Group 3.
        برای گزینش گروه خود عدد ۱ یا ۲ یا ۳ را  انتخاب کنید
    KeyboardComponent ker_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        group = None
      Each Frame:
        keys = event.getKeys()
        if '1' in keys:
            group = 1
            continueRoutine = False
        elif '2' in keys:
            group = 2
            continueRoutine = False
        elif '3' in keys:
            group = 3
            continueRoutine = False
  Routine TrainingGroup1
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize variables if not already done
        if 'correctResponses' not in globals():
            correctResponses = 0

        # Mapping numeric responses to speaker labels
        response_mapping = {
            '1': 'Speaker1',
            '2': 'Speaker2',
            '3': 'Speaker3',
            '4': 'Speaker4'
        }

        # Print mapping for debugging
        print(f"Response Mapping: {response_mapping}")
      End Routine:
        # Ensure CorrectAnswer is correctly defined
        CorrectAnswer = EnglishCorrectAnswer  # Using EnglishCorrectAnswer for comparison

        # Map participant response to speaker label
        participant_response_label = response_mapping.get(ResponseKey.keys[0], "Invalid")

        # Check the participant's response
        if participant_response_label == CorrectAnswer:
            correctResponses += 1
            feedbackText = "Correct! صحیح است"
        else:
            feedbackText = f"Incorrect! The correct answer is {EnglishCorrectAnswer}.    نادرست! پاسخ صحیح {PersianCorrectAnswer}"

        # Print the feedback text for debugging (optional)
        print(f"Feedback Text: {feedbackText}")

        # Pass feedbackText to the next routine (FeedbackRoutine1)
        thisExp.addData('feedbackText', feedbackText)
    ImageComponent image_1
      image [set every repeat] = $SpeakerImage1
      pos = (-0.6, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $SpeakerImage2
      pos = (-0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image [set every repeat] = $SpeakerImage3
      pos = (0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image [set every repeat] = $SpeakerImage4
      pos = (0.6, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    SoundComponent sound1
      sound [set every repeat] = $TrainingSound
      startVal [time (s)] = 0.0
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    TextComponent Instruction
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Who is speaking? press the number corresponding to the speaker.
        گوینده کیست؟ شماره گوینده را وارد کنید
    KeyboardComponent ResponseKey
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrainingGroup1_3
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  Routine TrainingGroup2
    ImageComponent image_11
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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
    ImageComponent SpeakerPicture2
      image [set every repeat] = $SpeakerImage
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_6
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent CodeFeedback2
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize feedback message
        feedback_message = ""
      End Routine:
        if Response2.keys:
            response_key = Response2.keys[0]  # Get the key as a string
            correct_speaker = CorrectAnswer  # This should be a string like 'Speaker1'
            if response_key == correct_speaker[-1]:  # Compare only the last character of the string, e.g., '1' for 'Speaker1'
                feedback_message2 = "Correct!"
            else:
                feedback_message2 = f"Incorrect. The correct answer was: {correct_speaker}"
        else:
            feedback_message2 = "No response made."
    SoundComponent Sound2
      sound [set every repeat] = $TrainingSound
      startVal [time (s)] = 0.0
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    TextComponent Instruction2
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Who is speaking? Press the number corresponding to the speaker.
        گوینده‌ی این جمله چی کسی بود؟  عدد گوینده مدنظر را وارد کنید.
    KeyboardComponent Response2
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrainingGroup3
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    CodeComponent CodeFeedback3
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize feedback message
        feedback_message = ""
      End Routine:
        if Response3.keys:
            response_key = Response3.keys[0]  # Get the key as a string
            correct_speaker = CorrectAnswer  # This should be a string like 'Speaker1'
            if response_key == correct_speaker[-1]:  # Compare only the last character of the string, e.g., '1' for 'Speaker1'
                feedback_message3 = "Correct!"
            else:
                feedback_message3 = f"Incorrect. The correct answer was: {correct_speaker}"
        else:
            feedback_message3 = "No response made."
    ImageComponent SpeakerPicture3
      image [set every repeat] = $SpeakerImage
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent Sound3
      sound [set every repeat] = $TrainingSound
      startVal [time (s)] = 0.0
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    TextComponent Instruction3
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Who is speaking? Press the number corresponding to the speaker.
        گوینده‌ی این جمله چی کسی بود؟  عدد گوینده مدنظر را وارد کنید.
    KeyboardComponent Response3
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BranchingLogic
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    CodeComponent BranchingCode
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import visual, core, event, data

        # Create a window
        win = visual.Window(
            size=[1024, 768],
            fullscr=True,
            screen=0,
            winType='pyglet',
            monitor='testMonitor',
            color=[0, 0, 0],
            colorSpace='rgb',
            units='pix'
        )

        # Load conditions from Excel file
        conditions = data.importConditions('path/to/Persian Trained- Training Phase.xlsx')

        # Initialize group variable
        group = None  # Initialize with a default value or None

        # Example logic to set the group variable
        # This could be based on participant input or other experimental logic
        # For demonstration, we assume there's a question that determines the group
        question = visual.TextStim(win, text='Press 1 for Group 1, Press 2 for Group 2')
        question.draw()
        win.flip()
        key = event.waitKeys(keyList=['1', '2'])

        if key:
            if '1' in key:
                group = 1
            elif '2' in key:
                group = 2

        # Ensure group is set before using it
        if group is None:
            raise ValueError("Group was not set. Please ensure the participant selects a group.")

        # Now you can safely use the group variable in your logic
        for trial in conditions:
            SpeakerImage = trial['ImageFile']  # This should be the path to the image file

            # Ensure SpeakerImage is a valid image path before using it
            SpeakerImag = visual.ImageStim(
                win=win,
                image=SpeakerImage,  # Now this should be a valid image file path
                mask=None,
                anchor='center'
            )

            # Draw the image
            SpeakerImag.draw()

            # Flip the window
            win.flip()

            # Wait for a key press and assign it to GroupChoice
            GroupChoice = event.waitKeys(keyList=['1', '2', '3'])  # Add the appropriate keys for your experiment

            # Example use of group
            if group == 1:
                print("Group is 1")
            else:
                print("Group is not 1")

            # Check GroupChoice.keys
            if GroupChoice:  # Ensure GroupChoice is not None
                print(f"Key pressed: {GroupChoice}")

        # Close the window
        win.close()
        core.quit()
  Routine Introduction
    TextComponent text_2
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Introduction:
        You will hear four speakers in English and Persian to help you familiarize yourself with them.
        در ابتدا به صدای چهار گوینده گوش دهید تا با انها اشنا شوید
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    ImageComponent image
      image [set every repeat] = Images/Speaker1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    SoundComponent sound_7
      sound [set every repeat] = Audio/Speaker1_En/P1-23-En.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 5
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    SoundComponent sound_8
      sound [set every repeat] = Audio/Speaker1_Per/P1-23-Per.wav
      startVal [time (s)] = 10
      stopVal [duration (s)] = 5
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    TextComponent text_4
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        Speaker 1
        گوینده ۱
    ImageComponent image_7
      image [set every repeat] = Images/Speaker2.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 10
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    SoundComponent sound_9
      sound [set every repeat] = Audio/Speaker2_En/P2-23-En.wav
      startVal [time (s)] = 15
      stopVal [duration (s)] = 5
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    SoundComponent sound_10
      sound [set every repeat] = Audio/Speaker2_Per/P2-23-Per.wav
      startVal [time (s)] = 20
      stopVal [duration (s)] = 5
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    TextComponent text_5
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.33)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        Speaker 2
        گوینده ۲
    ImageComponent image_8
      image [set every repeat] = Images/Speaker3.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 25
      stopVal [duration (s)] = 10
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    SoundComponent sound_11
      sound [set every repeat] = Audio/Speaker3_En/P3-23-En.wav
      startVal [time (s)] = 25
      stopVal [duration (s)] = 5
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    SoundComponent sound_12
      sound [set every repeat] = Audio/Speaker3_Per/P3-23-Per.wav
      startVal [time (s)] = 30
      stopVal [duration (s)] = 5
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    TextComponent text_6
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 25
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        Speaker 3
        گوینده ۳
    ImageComponent image_9
      image [set every repeat] = Images/Speaker4.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 35
      stopVal [duration (s)] = 10
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    SoundComponent sound_13
      sound [set every repeat] = Audio/Speaker4_En/P4-23-En.wav
      startVal [time (s)] = 35
      stopVal [duration (s)] = 5
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    SoundComponent sound_14
      sound [set every repeat] = Audio/Speaker4_Per/P4-23-Per.wav
      startVal [time (s)] = 40
      stopVal [duration (s)] = 5
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    TextComponent text_7
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.33)
      startVal [time (s)] = 35
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        Speaker 4
        گوینده ۴
  Routine Instructions
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    TextComponent InstructionText
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Please choose the number of the relevant speaker (like speaker 1, speaker 2, etc.) from the keyboard.
        لطفا شماره گوینده مربوطه را از روی کیبورد انتخاب کنید
  Routine example
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    ImageComponent image_10
      image [set every repeat] = Images/Speaker1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent sound_15
      sound [set every repeat] = Audio/Speaker1_En/P1-1-En.wav
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = whi is speaking? choose from the keyboard
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if ResponseKey.keys == str(CorrectAnswer):
            FeedbackText.text = "Correct!"
        else:
            FeedbackText.text = "Incorrect. The correct answer was " + str(CorrectAnswer)
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine Feedback
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  Routine FeedbackRoutine1
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    TextComponent FeedbackText
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedbackText
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  Routine FeedbackRoutine2
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    TextComponent FeedbackText2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text [set every repeat]:
        $feedback_message
    CodeComponent CodeFeedbackDisplay2
      Code Type = Auto->JS
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      Begin Routine:
        if ResponseKey.keys == str(CorrectAnswer):
            FeedbackText.text = "Correct!"
            thisExp.addData('Feedback', 'Correct')
        else:
            FeedbackText.text = "Incorrect. The correct answer was " + str(CorrectAnswer)
            thisExp.addData('Feedback', 'Incorrect')
  Routine FeedbackRoutine3
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    TextComponent FeedbackText3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedback_message
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    CodeComponent CodeFeedbackDisplay3
      Code Type = Auto->JS
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      Begin Routine:
        FeedbackText3.setText(feedback_message3)
  Routine TestingGroup1Routine
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    TextComponent TestInstructions1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        Please listen to the speaker and select the correct number.
        لطفا به جملات گوش دهید و شماره گوینده مدنظر را انتخاب کنید.
    ImageComponent SpeakerPicture1
      image [set every repeat] = $SpeakerImage1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_12
      image [set every repeat] = $SpeakerImage2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_13
      image [set every repeat] = $SpeakerImage3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_14
      image [set every repeat] = $SpeakerImage4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent Sound1
      sound [set every repeat] = $TestingSound
      startVal [time (s)] = 0.0
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    KeyboardComponent Response1
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestingGroup2Routine
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    TextComponent TestInstructions2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        Please listen to the speaker and select the correct number.
        لطفا به جملات گوش دهید و شماره گوینده مدنظر را انتخاب کنید.
    ImageComponent SpeakerPic2
      image [set every repeat] = $SpeakerPhoto
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent Sound_2
      sound [set every repeat] = $TestingSound
      startVal [time (s)] = 0.0
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    KeyboardComponent Response_2
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestingGroup3Routine
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    TextComponent TestInstructions3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        Please listen to the speaker and select the correct number.
        لطفا به جملات گوش دهید و شماره گوینده مدنظر را انتخاب کنید.
    ImageComponent SpeakerPic_3
      image [set every repeat] = $SpeakerPhoto
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent Sound_3
      sound [set every repeat] = $TestingSound
      startVal [time (s)] = 0.0
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    KeyboardComponent Response_3
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Initialize
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    CodeComponent InitializeCode
      Code Type = Auto->JS
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      Begin Routine:
        correctResponses = 0
  Routine CheckPerformance
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Calculate the percentage of correct responses
        totalTrials = TrainingLoopGroup1.nTotal
        correctPercentage = (correctResponses / totalTrials) * 100

        # Check if the participant has met the 85% criterion
        if correctPercentage >= 85:
            continueRoutine = False  # Allow to proceed to the test phase
        else:
            correctResponses = 0  # Reset correct responses counter
            TrainingLoopGroup1.finished = False  # Repeat the training loop
            continueRoutine = False
Flow
  Routine Initialize
  Routine trial
  Routine GroupSelection
  Routine Introduction
  Routine Instructions
  LoopInitiator TrainingLoopGroup1 loopType="TrialHandler"
    conditionsFile = Monolingual Persian- Training Phase.xlsx
    loopType = random
    nReps = 999
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    conditions:
      [{'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-1-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'},
      {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-2-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'},
      {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-3-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'},
      {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-4-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'},
      {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-5-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'}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
    Routine TrainingGroup1
    Routine FeedbackRoutine1
  LoopTerminator TrainingLoopGroup1
  Routine CheckPerformance
  LoopInitiator TrainingLoopGroup2 loopType="TrialHandler"
    conditionsFile = Persian Trained- Training Phase.xlsx
    loopType = random
    nReps = 1 if group == 2 else 0 
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    conditions:
      [{'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-1-Per.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-2-Per.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-3-Per.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-4-Per.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-5-Per.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-6-Per.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-7-Per.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-8-Per.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-9-Per.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-10-Per.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-11-Per.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-12-Per.wav', 'CorrectAnswer': 'Speaker1'}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
    Routine TrainingGroup2
    Routine FeedbackRoutine2
  LoopTerminator TrainingLoopGroup2
  LoopInitiator TrainingLoopGroup3 loopType="TrialHandler"
    conditionsFile = English Trained- Training Phase.xlsx
    loopType = random
    nReps = 1 if group == 3 else 0 
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    conditions:
      [{'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_En/P1-1-En.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_En/P1-2-En.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_En/P1-3-En.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_En/P1-4-En.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_En/P1-5-En.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_En/P1-6-En.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_En/P1-7-En.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_En/P1-8-En.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_En/P1-9-En.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_En/P1-10-En.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_En/P1-11-En.wav', 'CorrectAnswer': 'Speaker1'},
      {'SpeakerImage': 'Images/Speaker1.jpg', 'TrainingSound': 'Audio/Speaker1_En/P1-12-En.wav', 'CorrectAnswer': 'Speaker1'}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
    Routine TrainingGroup3
    Routine FeedbackRoutine3
  LoopTerminator TrainingLoopGroup3
  LoopInitiator TestingLoopGroup1 loopType="TrialHandler"
    conditionsFile = /Users/ohtalab2/Desktop/Experiment Folder/Monolingual Persian- Testing Phase.xlsx
    loopType = random
    nReps = 1 if group == 1 else 0
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    conditions:
      [{'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-1-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-2-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-3-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-4-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-5-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-6-Per.wav', 'CorrectResponse': 'Speaker1'}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
    Routine TestingGroup1Routine
  LoopTerminator TestingLoopGroup1
  LoopInitiator TestingLoopGroup2 loopType="TrialHandler"
    conditionsFile = Persian Trained- Test Phase.xlsx
    loopType = random
    nReps = 1 if group == 2 else 0
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    conditions:
      [{'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-1-En.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-2-En.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-3-En.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-4-En.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-5-En.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-6-En.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-7-En.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-8-En.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-9-En.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-10-En.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-11-En.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-12-En.wav', 'CorrectResponse': 'Speaker1'}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
    Routine TestingGroup2Routine
  LoopTerminator TestingLoopGroup2
  LoopInitiator TestingLoopGroup3 loopType="TrialHandler"
    conditionsFile = English Trained- Test Phase.xlsx
    loopType = random
    nReps = 1 if group == 3 else 0
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    conditions:
      [{'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-1-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-2-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-3-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-4-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-5-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-6-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-7-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-8-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-9-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-10-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-11-Per.wav', 'CorrectResponse': 'Speaker1'},
      {'SpeakerPhoto': 'Images/Speaker1.jpg', 'TestingSound': 'Audio/Speaker1_Per/P1-12-Per.wav', 'CorrectResponse': 'Speaker1'}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
    Routine TestingGroup3Routine
  LoopTerminator TestingLoopGroup3
