PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = 5-36 ready-Persian trained
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        group = None
  Routine GroupSelection
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    TextComponent GroupInstructions
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        به آزمایش شناسایی گوینده خوش آمدید

        لطفا در محیطی آرام آزمایش را انجام دهید

        برای گزینش گروه خود عدد ۱ یا ۲ یا ۳ را  انتخاب کنید
    KeyboardComponent key_resp
      allowedKeys = '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        group = None
      Each Frame:
        keys = event.getKeys()
        if '1' in keys:
            group = 1
            continueRoutine = False
        elif '2' in keys:
            group = 2
            continueRoutine = False
        elif '3' in keys:
            group = 3
            continueRoutine = False
  Routine TrainingGroup1
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        # Print mapping for debugging
        print(f"Response Mapping: {response_mapping}")
      End Routine:
        # Ensure CorrectAnswer is correctly defined
        CorrectAnswer = EnglishCorrectAnswer  # Using EnglishCorrectAnswer for comparison

        # Map participant response to speaker label
        participant_response_label = response_mapping.get(ResponseKey.keys[0], "Invalid")

        # Check the participant's response
        if participant_response_label == CorrectAnswer:
            correct_responses += 1
            feedbackText = "Correct! صحیح است"
        else:
            feedbackText = f"Incorrect! The correct answer is {EnglishCorrectAnswer}. نادرست! پاسخ صحیح {PersianCorrectAnswer} است"

        # Print the feedback text for debugging (optional)
        print(f"Feedback Text: {feedbackText}")

        # Pass feedbackText to the next routine
        thisExp.addData('feedbackText', feedbackText)
    ImageComponent image_1
      image [set every repeat] = $SpeakerImage1
      pos = (-0.6, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $SpeakerImage2
      pos = (-0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image [set every repeat] = $SpeakerImage3
      pos = (0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image [set every repeat] = $SpeakerImage4
      pos = (0.6, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    SoundComponent sound1
      sound [set every repeat] = $TrainingSound
      startVal [time (s)] = 0.0
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    TextComponent Instruction
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Who is speaking? press the number corresponding to the speaker.
        گوینده کیست؟ شماره گوینده را وارد کنید
    KeyboardComponent ResponseKey
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        if 'ResponseKey' in globals() and 'keys' in ResponseKey and len(ResponseKey.keys) > 0:
            participant_response_label = ResponseKey.keys[-1]  # Get the last key pressed
            if participant_response_label == CorrectAnswer:  # Assuming CorrectAnswer is defined
                correct_responses_group1 += 1
            total_trials_group1 += 1

        # Log data for debugging (optional)
        thisExp.addData('correct_responses_group1', correct_responses_group1)
        thisExp.addData('total_trials_group1', total_trials_group1)

        # Calculate accuracy after updating counters
        accuracy_group1 = correct_responses_group1 / total_trials_group1 if total_trials_group1 > 0 else 0.0

        # Check if participant meets the accuracy criterion for Group 1
        proceed_to_test = accuracy_group1 >= TARGET_ACCURACY

        # If accuracy criterion not met, set flag to retry training
        retry_training = not proceed_to_test
  Routine TrainingGroup1_3
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  Routine TrainingGroup2
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    CodeComponent var_1
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize variables if not already done
        if 'correctResponses' not in globals():
            correctResponses = 0
        if 'total_trials' not in globals():
            total_trials = 0

        # Mapping numeric responses to speaker labels
        response_mapping = {
            '1': 'Speaker1',
            '2': 'Speaker2',
            '3': 'Speaker3',
            '4': 'Speaker4'
        }

        # Print mapping for debugging
        print(f"Response Mapping: {response_mapping}")
      End Routine:
        # Ensure CorrectAnswer is correctly defined
        CorrectAnswer = EnglishCorrectAnswer  # Using EnglishCorrectAnswer for comparison

        # Map participant response to speaker label
        if len(Response2.keys) > 0:  # Check if a key was pressed
            participant_response_label = response_mapping.get(Response2.keys[0], "Invalid")

            # Check the participant's response
            if participant_response_label == CorrectAnswer:
                correctResponses += 1
                feedbackText = "صحیح است"
            else:
                feedbackText = f"نادرست! پاسخ صحیح {PersianCorrectAnswer} است"  # Removed the full stop

            total_trials += 1

        # Print the feedback text for debugging (optional)
        print(f"Feedback Text: {feedbackText}")

        # Pass feedbackText to the next routine (FeedbackRoutine3)
        thisExp.addData('feedbackText', feedbackText)

        # Log data for debugging (optional)
        thisExp.addData('correct_responses_group2', correctResponses)
        thisExp.addData('total_trials_group2', total_trials)
    ImageComponent image_11
      image [set every repeat] = $SpeakerImage1
      pos = (-0.6, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent SpeakerPicture2
      image [set every repeat] = $SpeakerImage2
      pos = (-0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image [set every repeat] = $SpeakerImage3
      pos = (0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image [set every repeat] = $SpeakerImage4
      pos = (0.6, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    SoundComponent Sound2
      sound [set every repeat] = $TrainingSound
      startVal [time (s)] = 0.0
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    TextComponent Instruction2
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = گوینده کیست؟ شماره گوینده را وارد کنید
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    KeyboardComponent Response2
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent SessionManager
      Code Type = Auto->JS
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      Begin Experiment:
        trialN = 0
      Begin Routine:
        if trialN  == 80:
            trialN = 1
        else:
            trialN +=1
      End Routine:
        sessionNumber += 1  # Increment session number
        print(f"Updated session number: {sessionNumber}")  # Debugging
    TextComponent SessionNumberTest
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, 0.30)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(trialN) + ' out of 80'
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  Routine TrainingGroup3
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    CodeComponent var
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize variables if not already done
        if 'correctResponses' not in globals():
            correctResponses = 0
        if 'total_trials' not in globals():
            total_trials = 0

        # Mapping numeric responses to speaker labels
        response_mapping = {
            '1': 'Speaker1',
            '2': 'Speaker2',
            '3': 'Speaker3',
            '4': 'Speaker4'
        }

        # Print mapping for debugging
        print(f"Response Mapping: {response_mapping}")
      End Routine:
        # Ensure CorrectAnswer is correctly defined
        CorrectAnswer = EnglishCorrectAnswer  # Using EnglishCorrectAnswer for comparison

        # Map participant response to speaker label
        if len(Response2.keys) > 0:  # Check if a key was pressed
            participant_response_label = response_mapping.get(Response2.keys[0], "Invalid")

            # Check the participant's response
            if participant_response_label == CorrectAnswer:
                correctResponses += 1
                feedbackText = "Correct! صحیح است"
            else:
                feedbackText = f"Incorrect! The correct answer is {EnglishCorrectAnswer}. نادرست! پاسخ صحیح {PersianCorrectAnswer} است"

            total_trials += 1

        # Print the feedback text for debugging (optional)
        print(f"Feedback Text: {feedbackText}")

        # Pass feedbackText to the next routine (FeedbackRoutine3)
        thisExp.addData('feedbackText', feedbackText)

        # Log data for debugging (optional)
        thisExp.addData('correct_responses_group2', correctResponses)
        thisExp.addData('total_trials_group2', total_trials)
    ImageComponent SpeakerPicture3
      image [set every repeat] = $SpeakerImage1
      pos = (-0.6, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_15
      image [set every repeat] = $SpeakerImage2
      pos = (-0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_16
      image [set every repeat] = $SpeakerImage3
      pos = (0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_17
      image [set every repeat] = $SpeakerImage4
      pos = (0.6, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    SoundComponent Sound3
      sound [set every repeat] = $TrainingSound
      startVal [time (s)] = 0.0
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    TextComponent Instruction3
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Who is speaking? press the number corresponding to the speaker.
        گوینده کیست؟ شماره گوینده را وارد کنید
    KeyboardComponent Response3
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BranchingLogic
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    CodeComponent BranchingCode
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import visual, core, event, data

        # Create a window
        win = visual.Window(
            size=[1024, 768],
            fullscr=True,
            screen=0,
            winType='pyglet',
            monitor='testMonitor',
            color=[0, 0, 0],
            colorSpace='rgb',
            units='pix'
        )

        # Load conditions from Excel file
        conditions = data.importConditions('path/to/Persian Trained- Training Phase.xlsx')

        # Initialize group variable
        group = None  # Initialize with a default value or None

        # Example logic to set the group variable
        # This could be based on participant input or other experimental logic
        # For demonstration, we assume there's a question that determines the group
        question = visual.TextStim(win, text='Press 1 for Group 1, Press 2 for Group 2')
        question.draw()
        win.flip()
        key = event.waitKeys(keyList=['1', '2'])

        if key:
            if '1' in key:
                group = 1
            elif '2' in key:
                group = 2

        # Ensure group is set before using it
        if group is None:
            raise ValueError("Group was not set. Please ensure the participant selects a group.")

        # Now you can safely use the group variable in your logic
        for trial in conditions:
            SpeakerImage = trial['ImageFile']  # This should be the path to the image file

            # Ensure SpeakerImage is a valid image path before using it
            SpeakerImag = visual.ImageStim(
                win=win,
                image=SpeakerImage,  # Now this should be a valid image file path
                mask=None,
                anchor='center'
            )

            # Draw the image
            SpeakerImag.draw()

            # Flip the window
            win.flip()

            # Wait for a key press and assign it to GroupChoice
            GroupChoice = event.waitKeys(keyList=['1', '2', '3'])  # Add the appropriate keys for your experiment

            # Example use of group
            if group == 1:
                print("Group is 1")
            else:
                print("Group is not 1")

            # Check GroupChoice.keys
            if GroupChoice:  # Ensure GroupChoice is not None
                print(f"Key pressed: {GroupChoice}")

        # Close the window
        win.close()
        core.quit()
  Routine Introduction
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    TextComponent text_2
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = در ابتدا به صدای چهار گوینده گوش دهید تا با آنها آشنا شوید
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    ImageComponent image
      image [set every repeat] = Images/Speaker1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 5
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    SoundComponent sound_8
      sound [set every repeat] = Audio/Speaker1_Per/P1-23-Per.wav
      startVal [time (s)] = 7
      stopVal [duration (s)] = 5
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    TextComponent text_4
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 5
      text [set every repeat] = گوینده ۱
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    ImageComponent image_7
      image [set every repeat] = Images/Speaker2.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 5
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    SoundComponent sound_10
      sound [set every repeat] = Audio/Speaker2_Per/P2-23-Per.wav
      startVal [time (s)] = 15
      stopVal [duration (s)] = 5
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    TextComponent text_5
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.33)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        گوینده ۲
    ImageComponent image_8
      image [set every repeat] = Images/Speaker3.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 23
      stopVal [duration (s)] = 5
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    SoundComponent sound_12
      sound [set every repeat] = Audio/Speaker3_Per/P3-23-Per.wav
      startVal [time (s)] = 23
      stopVal [duration (s)] = 5
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    TextComponent text_6
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 23
      stopVal [duration (s)] = 5
      text [set every repeat] = گوینده ۳
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    ImageComponent image_9
      image [set every repeat] = Images/Speaker4.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 31
      stopVal [duration (s)] = 5
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    SoundComponent sound_14
      sound [set every repeat] = Audio/Speaker4_Per/P4-23-Per.wav
      startVal [time (s)] = 31
      stopVal [duration (s)] = 5
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    TextComponent text_7
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.33)
      startVal [time (s)] = 31
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        گوینده ۴
  Routine Instructions
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    TextComponent InstructionText
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        این آزمایش دو مرحله دارد: آموزش و آزمون

        در طول هر مرحله شماره گوینده را وارد کنید

        در مرحله آموزش پاسخ صحیح را دریافت خواهید کرد
         اما در مرحله آزمون بازخوردی دریافت نخواهید کرد
  Routine example
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    ImageComponent image_10
      image [set every repeat] = Images/Speaker1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent sound_15
      sound [set every repeat] = Audio/Speaker1_En/P1-1-En.wav
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = whi is speaking? choose from the keyboard
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if ResponseKey.keys == str(CorrectAnswer):
            FeedbackText.text = "Correct!"
        else:
            FeedbackText.text = "Incorrect. The correct answer was " + str(CorrectAnswer)
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine Feedback
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  Routine FeedbackRoutine1
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    TextComponent FeedbackText
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedbackText
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine tab in the Code Component of FeedbackRoutine1
        if total_trials > 0 and (correct_responses / total_trials >= TARGET_ACCURACY):
            continue_to_test_phases = True
            TrainingLoopGroup1.finished = True  # End the training loop
        else:
            continue_to_test_phases = False
  Routine FeedbackRoutine2
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    TextComponent FeedbackText2
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedbackText
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine tab in the Code Component of FeedbackRoutine1
        if total_trials > 0 and (correct_responses / total_trials >= TARGET_ACCURACY):
            continue_to_test_phases = True
            TrainingLoopGroup1.finished = True  # End the training loop
        else:
            continue_to_test_phases = False
  Routine FeedbackRoutine3
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    TextComponent FeedbackText3
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedbackText
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  Routine TestingGroup1Routine
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    TextComponent TestInstructions1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        Please listen to the speaker and select the correct number.
        لطفا به جملات گوش دهید و شماره گوینده مدنظر را انتخاب کنید.
    ImageComponent SpeakerPicture1
      image [set every repeat] = $SpeakerImage1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_12
      image [set every repeat] = $SpeakerImage2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_13
      image [set every repeat] = $SpeakerImage3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_14
      image [set every repeat] = $SpeakerImage4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent Sound1
      sound [set every repeat] = $TestingSound
      startVal [time (s)] = 0.0
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    KeyboardComponent Response1
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestingGroup2Routine
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    TextComponent TestInstructions2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        Please listen to the speaker and select the correct number.
        لطفا به جملات گوش دهید و شماره گوینده مدنظر را انتخاب کنید.
    ImageComponent SpeakerPic2
      image [set every repeat] = $SpeakerPhoto
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent Sound_2
      sound [set every repeat] = $TestingSound
      startVal [time (s)] = 0.0
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    KeyboardComponent Response_2
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestingGroup3Routine
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    TextComponent TestInstructions3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        Please listen to the speaker and select the correct number.
        لطفا به جملات گوش دهید و شماره گوینده مدنظر را انتخاب کنید.
    ImageComponent SpeakerPic_3
      image [set every repeat] = $SpeakerPhoto
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent Sound_3
      sound [set every repeat] = $TestingSound
      startVal [time (s)] = 0.0
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    KeyboardComponent Response_3
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Initialize
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    CodeComponent Initialize_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize counters for training groups
        totalTrials1 = 0
        correctResponses1 = 0
        totalTrials2 = 0
        correctResponses2 = 0
        totalTrials3 = 0
        correctResponses3 = 0

        # Initialize performance flags
        passGroup1 = False
        passGroup2 = False
        passGroup3 = False
  Routine BranchingLogic_2
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if group == 1:
            continueRoutine = False  # Skip this routine
            training_group = 'TrainingGroup1'
            testing_group = 'TestingGroup1'
        elif group == 2:
            continueRoutine = False
            training_group = 'TrainingGroup2'
            testing_group = 'TestingGroup2'
        elif group == 3:
            continueRoutine = False
            training_group = 'TrainingGroup3'
            testing_group = 'TestingGroup3'
  Routine TestPhase1
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if not proceed_to_test:
            continueRoutine = False  # Skip the test phase if criteria are not met
    ImageComponent test1_image1
      image [set every repeat] = Images/Speaker1.jpg
      pos = (-0.6, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent test1_image2
      image [set every repeat] = Images/Speaker2.jpg
      pos = (-0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent test1_image3
      image [set every repeat] = Images/Speaker3.jpg
      pos = (0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent test1_image4
      image [set every repeat] = Images/Speaker4.jpg
      pos = (0.6, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    SoundComponent test1_sound
      sound [set every repeat] = $TestingSound
      startVal [time (s)] = 0.0
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    TextComponent text_3
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Who is speaking? press the number corresponding to the speaker.
        گوینده کیست؟ شماره گوینده را وارد کنید
    KeyboardComponent test1_response_keyboard
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent log_response_test1
      Code Type = Auto->JS
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      Begin Routine:
        # Print for debugging purposes
        print(f"Starting TestPhase1")
        # Initialize variables if needed
        test1_response_keyboard.keys = []
      End Routine:
        # End Routine tab in the Code Component of TestPhase1 (log_response_test1)

        # Check if the response object exists and has keys
        if 'test1_response_keyboard' in locals() and test1_response_keyboard.keys is not None:
            thisExp.addData('test1_response', test1_response_keyboard.keys)
        else:
            thisExp.addData('test1_response', 'No response')

        # Log other data
        thisExp.addData('test1_image_file1', SpeakerPhoto1)
        thisExp.addData('test1_image_file2', SpeakerPhoto2)
        thisExp.addData('test1_image_file3', SpeakerPhoto3)
        thisExp.addData('test1_image_file4', SpeakerPhoto4)
        thisExp.addData('test1_sound_file', TestingSound)
        thisExp.addData('english_correct_answer', EnglishCorrectAnswer)
        thisExp.addData('persian_correct_answer', PersianCorrectAnswer)
  Routine TestPhase2
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if not proceed_to_test:
            continueRoutine = False  # Skip the test phase if criteria are not met
    ImageComponent test2_image1
      image [set every repeat] = $SpeakerPhoto1
      pos = (-0.6, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent test2_image2
      image [set every repeat] = $SpeakerPhoto2
      pos = (-0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent test2_image3
      image [set every repeat] = $SpeakerPhoto3
      pos = (0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent test2_image4
      image [set every repeat] = $SpeakerPhoto4
      pos = (0.6, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    SoundComponent test2_sound
      sound [set every repeat] = $TestingSound
      startVal [time (s)] = 0.0
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    TextComponent text_8
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Who is speaking? press the number corresponding to the speaker.
        گوینده کیست؟ شماره گوینده را وارد کنید
    KeyboardComponent test2_response_keyboard
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent log_response_test2
      Code Type = Auto->JS
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      Begin Routine:
        # Print for debugging purposes
        print(f"Starting TestPhase2")
        # Initialize variables if needed
        test2_response_keyboard.keys = []
      End Routine:
        # End Routine tab in the Code Component of TestPhase2 (log_response_test2)

        # Check if the response object exists and has keys
        if 'test2_response_keyboard' in locals() and test2_response_keyboard.keys is not None:
            thisExp.addData('test2_response', test2_response_keyboard.keys)
        else:
            thisExp.addData('test2_response', 'No response')

        # Log other data
        thisExp.addData('test2_image_file1', SpeakerPhoto1)
        thisExp.addData('test2_image_file2', SpeakerPhoto2)
        thisExp.addData('test2_image_file3', SpeakerPhoto3)
        thisExp.addData('test2_image_file4', SpeakerPhoto4)
        thisExp.addData('test2_sound_file', TestingSound)
        thisExp.addData('english_correct_answer', EnglishCorrectResponse)
        thisExp.addData('persian_correct_answer', PersianCorrectResponse)
  Routine TestPhase3
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    ImageComponent test3_image1
      image [set every repeat] = $SpeakerPhoto1
      pos = (-0.6, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent test3_image2
      image [set every repeat] = $SpeakerPhoto2
      pos = (-0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent test3_image3
      image [set every repeat] = $SpeakerPhoto3
      pos = (0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent test3_image4
      image [set every repeat] = $SpeakerPhoto4
      pos = (0.6, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    SoundComponent test3_sound
      sound [set every repeat] = $TestingSound
      startVal [time (s)] = 0.0
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    TextComponent text_10
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Who is speaking? press the number corresponding to the speaker.
        گوینده کیست؟ شماره گوینده را وارد کنید
    KeyboardComponent test3_response_keyboard
      allowedKeys [set every repeat] = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent log_response_test3
      Code Type = Auto->JS
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      Begin Routine:
        # Print for debugging purposes
        print(f"Starting TestPhase3")
        # Initialize variables if needed
        test3_response_keyboard.keys = []
      End Routine:
        # End Routine tab in the Code Component of TestPhase3 (log_response_test3)

        # Check if the response object exists and has keys
        if 'test3_response_keyboard' in locals() and test3_response_keyboard.keys is not None:
            thisExp.addData('test3_response', test3_response_keyboard.keys)
        else:
            thisExp.addData('test3_response', 'No response')

        # Log other data
        thisExp.addData('test3_image_file1', SpeakerPhoto1)
        thisExp.addData('test3_image_file2', SpeakerPhoto2)
        thisExp.addData('test3_image_file3', SpeakerPhoto3)
        thisExp.addData('test3_image_file4', SpeakerPhoto4)
        thisExp.addData('test3_sound_file', TestingSound)
        thisExp.addData('english_correct_answer', EnglishCorrectAnswer)
        thisExp.addData('persian_correct_answer', PersianCorrectAnswer)
  Routine InitializeExperiment
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize global variables
        total_trials = 0
        correct_responses = 0
        total_trials_group1 = 0
        correct_responses_group1 = 0
        total_trials_group2 = 0
        correct_responses_group2 = 0
        total_trials_group3 = 0
        correct_responses_group3 = 0

        # Initialize counters for correct responses and total trials for each group
        correct_responses_group1 = 0
        total_trials_group1 = 0

        correct_responses_group2 = 0
        total_trials_group2 = 0

        correct_responses_group3 = 0
        total_trials_group3 = 0

        TARGET_ACCURACY = 0.85

        # Response mapping dictionary
        response_mapping = {
            '1': 'Speaker1',
            '2': 'Speaker2',
            '3': 'Speaker3',
            '4': 'Speaker4'
        }

        # Initialize flags
        proceed_to_test = False  # Flag to determine if participant should proceed to test phase
        retry_training = False  # Flag to determine if participant should retry training phase

        # Initialize TrainingGroup (you can set this value based on your experimental design)
        TrainingGroup = 2  # or 2, or 3 depending on your experiment setup
        sessionNumber = 1  # Initialize session number

        import time

        trial_count = 0
        break_after_trials = 40
        break_duration = 360  # 5 minutes in seconds
        break_flag = False
        break_start_time = None
        break_message = "take a break"
      End Routine:
        sessionNumber += 1  # Increment session number
  Routine WelcomeTest
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    TextComponent text_12
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Weolcome to the Test Phase!
        Please enter the number corresponding to the speaker you hear.
        به مرحله آزمون خوش آمدید
        لطفا پس از شنیدن جملات٬ شماره گوینده را وارد کنید
  Routine accuracy
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    CodeComponent transition_logic
      Code Type = Auto->JS
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      Begin Routine:
        # Calculate accuracy for each group
        accuracy_group1 = correct_responses_group1 / total_trials_group1 if total_trials_group1 > 0 else 0
        accuracy_group2 = correct_responses_group2 / total_trials_group2 if total_trials_group2 > 0 else 0
        accuracy_group3 = correct_responses_group3 / total_trials_group3 if total_trials_group3 > 0 else 0

        # Check if the participant met the accuracy criterion
        if TrainingGroup == 1 and accuracy_group1 >= TARGET_ACCURACY:
            proceed_to_test = True
        elif TrainingGroup == 2 and accuracy_group2 >= TARGET_ACCURACY:
            proceed_to_test = True
        elif TrainingGroup == 3 and accuracy_group3 >= TARGET_ACCURACY:
            proceed_to_test = True
        else:
            proceed_to_test = False

        # Log data for debugging (optional)
        thisExp.addData('accuracy_group1', accuracy_group1)
        thisExp.addData('accuracy_group2', accuracy_group2)
        thisExp.addData('accuracy_group3', accuracy_group3)
        thisExp.addData('proceed_to_test', proceed_to_test)
      End Routine:
        if proceed_to_test:
            # Skip the rest of the current routine if necessary
            continueRoutine = False
        else:
            # Ensure to handle logic for repeating or ending the experiment
            continueRoutine = True
  Routine CheckAccuracy
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        # Calculate accuracy for each group
        accuracy_group1 = correct_responses_group1 / total_trials_group1 if total_trials_group1 > 0 else 0
        accuracy_group2 = correct_responses_group2 / total_trials_group2 if total_trials_group2 > 0 else 0
        accuracy_group3 = correct_responses_group3 / total_trials_group3 if total_trials_group3 > 0 else 0

        # Check if the participant met the accuracy criterion
        if TrainingGroup == 1 and accuracy_group1 >= TARGET_ACCURACY:
            proceed_to_test = True
        elif TrainingGroup == 2 and accuracy_group2 >= TARGET_ACCURACY:
            proceed_to_test = True
        elif TrainingGroup == 3 and accuracy_group3 >= TARGET_ACCURACY:
            proceed_to_test = True
        else:
            proceed_to_test = False

        # Log data for debugging (optional)
        thisExp.addData('accuracy_group1', accuracy_group1)
        thisExp.addData('accuracy_group2', accuracy_group2)
        thisExp.addData('accuracy_group3', accuracy_group3)
        thisExp.addData('proceed_to_test', proceed_to_test)
      End Routine:
        if proceed_to_test:
            # Exit the loop
            TrainingLoopGroup3.finished = True
        else:
            # Continue the loop
            TrainingLoopGroup3.finished = False
  Routine CheckAccuracy3
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        TARGET_ACCURACY = 0.85  # 85% accuracy threshold

        # Calculate accuracy
        accuracy = correctResponses / total_trials if total_trials > 0 else 0.0

        # Check if participant meets the accuracy criterion
        if accuracy >= TARGET_ACCURACY:
            proceed_to_test = True
            repeated_TrainingLoopGroup3.finished = True
        else:
            proceed_to_test = False
            correctResponses = 0  # Reset score
            total_trials = 0  # Reset total trials

        # Print accuracy for debugging
        print(f"Accuracy: {accuracy}")
        print(f"Proceed to test: {proceed_to_test}")

        # Log data for debugging (optional)
        thisExp.addData('accuracy_group3', accuracy)
        thisExp.addData('proceed_to_test', proceed_to_test)
  Routine CheckAccuracy2
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        TARGET_ACCURACY = 0.85  # 85% accuracy threshold

        # Calculate accuracy
        accuracy_group2 = correctResponses_group2 / total_trials_group2 if total_trials_group2 > 0 else 0.0

        # Check if participant meets the accuracy criterion
        if accuracy_group2 >= TARGET_ACCURACY:
            proceed_to_test = True
            repeated_TrainingLoopGroup2.finished = True
        else:
            proceed_to_test = False
            correctResponses_group2 = 0  # Reset score
            total_trials_group2 = 0  # Reset total trials

        # Print accuracy for debugging
        print(f"Accuracy: {accuracy_group2}")
        print(f"Proceed to test: {proceed_to_test}")

        # Log data for debugging (optional)
        thisExp.addData('accuracy_group2', accuracy_group2)
        thisExp.addData('proceed_to_test', proceed_to_test)
  Routine Finish
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    TextComponent text_11
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        The End!
        Thank you for your participation.

        پایان
        با تشکر از مشارکت شما
  Routine HeadphoneCheck
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    TextComponent text_13
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        اگر از هدفون استفاده میکنید روی باکس سفید کلیک کنید
         در غیر این صورت روی باکس کلیک نکنید
    MouseComponent mouse
      clickable = checkbox
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent checkbox
      fillColor = white
      pos = (0, -0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent CheckBoxLogic
      Code Type = Auto->JS
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      Begin Routine:
        checkbox_ticked = False
      Each Frame:
        if mouse.isPressedIn(checkbox):  # Use the actual name of the polygon component
            checkbox_ticked = not checkbox_ticked
            if checkbox_ticked:
                checkbox.fillColor = 'black'  # Change color to indicate it's ticked
            else:
                checkbox.fillColor = 'white'  # Change back to white if unticked
      End Routine:
        thisExp.addData('Headphone_Used', checkbox_ticked)
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
  Routine Break
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if TrainingLoopGroup2.thisN != 39:
            continueRoutine = False
    TextComponent break_message
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        لطفا کمی استراحت کنید
        در غیر اینصورت برای ادامه روی مربع کلیک کنید
    MouseComponent mouse2
      clickable = checkbox2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent checkbox2
      fillColor = white
      pos = (0, -0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        checkbox_ticked = False
      Each Frame:
        if mouse.isPressedIn(checkbox2):  # Use the actual name of the polygon component
            checkbox_ticked = not checkbox_ticked
            if checkbox_ticked:
                checkbox.fillColor = 'black'  # Change color to indicate it's ticked
            else:
                checkbox.fillColor = 'white'  # Change back to white if unticked
      End Routine:
        thisExp.addData('Proceed_Break', checkbox_ticked)
    CodeComponent for_mouse
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Experiment:
        # Create a clock for the timer
        break_timer = core.Clock()
      Begin Routine:
        # Start the timer
        break_timer.reset()
      Each Frame:
        # Update the text component with the remaining time
        remaining_time = 360 - break_timer.getTime()  # Assuming a 360-second break
        text_component.setText(f'زمان باقی‌مانده: {remaining_time:.1f} ثانیه')
        text_component.setFont('Arial')  # Set to a font that supports Persian

        # End the routine after 360 seconds
        if break_timer.getTime() > 360:
            continueRoutine = False
      End Routine:
        # Optional: Record the final time or perform other tasks
        final_time = break_timer.getTime()
    TextComponent text_component
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, 0.30)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
  Routine Countdown
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    TextComponent number1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ۱
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    TextComponent number2
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text = ۲
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    TextComponent number3
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = ۳
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    TextComponent start
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 2
      text = شروع!
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    TextComponent silence
      letterHeight = 0.05
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 2
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Flow
  Routine trial
  Routine GroupSelection
  Routine HeadphoneCheck
  Routine Introduction
  Routine Instructions
  Routine Countdown
  Routine InitializeExperiment
  LoopInitiator repeated_TrainingLoopGroup2 loopType="TrialHandler"
    conditionsFile = Persian Trained- Training Phase.xlsx
    loopType = random
    nReps = 999
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    conditions:
      [{'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-1-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'},
      {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-2-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'},
      {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-3-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'},
      {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-4-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'},
      {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-5-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'}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
    LoopInitiator TrainingLoopGroup2 loopType="TrialHandler"
      conditionsFile = Persian Trained- Training Phase.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-1-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'},
        {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-2-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'},
        {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-3-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'},
        {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-4-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'},
        {'SpeakerImage1': 'Images/Speaker1.jpg', 'SpeakerImage2': 'Images/Speaker2.jpg', 'SpeakerImage3': 'Images/Speaker3.jpg', 'SpeakerImage4': 'Images/Speaker4.jpg', 'TrainingSound': 'Audio/Speaker1_Per/P1-5-Per.wav', 'EnglishCorrectAnswer': 'Speaker1', 'PersianCorrectAnswer': 'گوینده ۱'}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
      Routine TrainingGroup2
      Routine FeedbackRoutine2
      Routine Break
    LoopTerminator TrainingLoopGroup2
    Routine CheckAccuracy2
  LoopTerminator repeated_TrainingLoopGroup2
  Routine WelcomeTest
  LoopInitiator testPhase2Loop loopType="TrialHandler"
    conditionsFile = Persian Trained- Test Phase.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'SpeakerPhoto1': 'Images/Speaker1.jpg', 'SpeakerPhoto2': 'Images/Speaker2.jpg', 'SpeakerPhoto3': 'Images/Speaker3.jpg', 'SpeakerPhoto4': 'Images/Speaker4.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-1-En.wav', 'EnglishCorrectResponse': 'Speaker1', 'PersianCorrectResponse': 'گوینده ۱'},
      {'SpeakerPhoto1': 'Images/Speaker1.jpg', 'SpeakerPhoto2': 'Images/Speaker2.jpg', 'SpeakerPhoto3': 'Images/Speaker3.jpg', 'SpeakerPhoto4': 'Images/Speaker4.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-2-En.wav', 'EnglishCorrectResponse': 'Speaker1', 'PersianCorrectResponse': 'گوینده ۱'},
      {'SpeakerPhoto1': 'Images/Speaker1.jpg', 'SpeakerPhoto2': 'Images/Speaker2.jpg', 'SpeakerPhoto3': 'Images/Speaker3.jpg', 'SpeakerPhoto4': 'Images/Speaker4.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-3-En.wav', 'EnglishCorrectResponse': 'Speaker1', 'PersianCorrectResponse': 'گوینده ۱'},
      {'SpeakerPhoto1': 'Images/Speaker1.jpg', 'SpeakerPhoto2': 'Images/Speaker2.jpg', 'SpeakerPhoto3': 'Images/Speaker3.jpg', 'SpeakerPhoto4': 'Images/Speaker4.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-4-En.wav', 'EnglishCorrectResponse': 'Speaker1', 'PersianCorrectResponse': 'گوینده ۱'},
      {'SpeakerPhoto1': 'Images/Speaker1.jpg', 'SpeakerPhoto2': 'Images/Speaker2.jpg', 'SpeakerPhoto3': 'Images/Speaker3.jpg', 'SpeakerPhoto4': 'Images/Speaker4.jpg', 'TestingSound': 'Audio/Speaker1_En/P1-5-En.wav', 'EnglishCorrectResponse': 'Speaker1', 'PersianCorrectResponse': 'گوینده ۱'}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
    Routine TestPhase2
  LoopTerminator testPhase2Loop
  Routine Finish
